<?xml version="1.0" encoding="UTF-8"?><batch>
    <batchstep method="io.github.mzmine.modules.io.import_rawdata_mzml.MSDKmzMLImportModule">
        <parameter name="File names">
            <file>Z:\data\example\out\180228_StS_flowrate_Bd16_ctrl_rep1\180228_StS_flowrate_Bd16_ctrl_rep1.mzML</file>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans"/>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Mass detector" selected_item="Centroid">
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            <module name="Centroid">
                <parameter name="Noise level">1000.0</parameter>
                <parameter name="Detect isotope signals below noise level" selected="false">
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                </parameter>
            </module>
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        </parameter>
        <parameter name="Denormalize fragment scans (traps)">false</parameter>
        <parameter name="Output netCDF filename (optional)" selected="false"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_targeted.TargetedFeatureDetectionModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <ms_level>1</ms_level>
            <scan_definition/>
        </parameter>
        <parameter name="Name suffix">detectedPeak</parameter>
        <parameter name="Database file">
            <current_file>Z:\data\example\out\180228_StS_flowrate_Bd16_ctrl_rep1\profile\180228_StS_flowrate_Bd16_ctrl_rep1_mzmine_tpd.csv</current_file>
        </parameter>
        <parameter name="Field separator">,</parameter>
        <parameter name="Columns">
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            <importtype column="mz" datatype="io.github.mzmine.datamodel.features.types.numbers.PrecursorMZType" selected="true"/>
            <importtype column="rt" datatype="io.github.mzmine.datamodel.features.types.numbers.RTType" selected="true"/>
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            <importtype column="name" datatype="io.github.mzmine.datamodel.features.types.annotations.CompoundNameType" selected="true"/>
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        </parameter>
        <parameter name="Intensity tolerance">0.5</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.001</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" selected="false" unit="MINUTES">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</parameter>
        <parameter name="Mobility time tolerance" selected="false"/>
        <parameter name="Calculate adduct masses" selected="false">
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_csv.CSVExportModularModule">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>C:\data\data\sihumi\mzexport.csv</current_file>
        </parameter>
        <parameter name="Field separator">,</parameter>
        <parameter name="Identification separator">;</parameter>
        <parameter name="Remove empty columns">false</parameter>
        <parameter name="Filter rows">ALL</parameter>
    </batchstep>
</batch>
